Prompt_For_Pipeline_Parameter_Value
!
! Asks user to input their known mass in Kg
!
/PIPELINE_PARAMETER_NAME=MASS
/PROMPT=Enter Subject mass in Kg
/DATA_TYPE=STRING
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;

Evaluate_Expression
!
! Saves input as a metric named "SUBJECT MASS" 
!
/EXPRESSION=::MASS
/RESULT_NAME=SUBJECT MASS
/RESULT_TYPE=METRIC
/RESULT_FOLDER=PROCESSED
;

Divide_Signal_By_Constant
!
! Converts force plate signals in Newtons
! to their equivalent mass in Kg
!
/SIGNAL_TYPES=FORCE
! /SIGNAL_FOLDER=ORIGINAL
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! /RESULT_FOLDER=PROCESSED
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/CONSTANT=9.81
;

Metric_From_C3D_Parameter
!
! Reads date of data acquisition from
! c3d to include on report
!
/METRIC_NAME=DATE
/PARAMETER_GROUP=TRIAL
/PARAMETER_NAME=DATE
;

Metric_From_C3D_Parameter
!
! Reads time of data acquisition from 
! c3d to include on report
!
/METRIC_NAME=TIME
/PARAMETER_GROUP=TRIAL
/PARAMETER_NAME=TIME
;

Subtract_Signals
!
! Subtracting any signal from itself creates a 'ZERO' 
! signal so we can later add metric values to 
! this signal to represent constants as lines on graphs
!
/SIGNAL_TYPES=DERIVED+DERIVED
/SIGNAL_FOLDER=PROCESSED+PROCESSED
/SIGNAL_NAMES=FP1+FP1
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/RESULT_NAME=ZERO
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;

Add_Signals
!
! We add the 'SUBJECT MASS' metric to the 'ZERO'
! signal so that the subject's mass can be represented
! by a constant signal on the vertical force graph
! 
/SIGNAL_TYPES=DERIVED+METRIC
/SIGNAL_FOLDER=PROCESSED+PROCESSED
/SIGNAL_NAMES=ZERO+SUBJECT MASS
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/RESULT_NAME=SUBJECT MASS
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;

Open_Report_Template
!
! Change this filepath to where you saved the report 
! template (.rgt) file to allow it to open automatically. 
! If the filepath call fails it will give you the option 
! to select the filepath manually.
!
 /REPORT_TEMPLATE=C:\My Captures\QA_Daily Forceplate spotcheck\QA_Daily Fz reports\Report_QA_Daily FP spotcheck.rgt
;

Switch_to_Report_Mode
!
! Selects the 'Reports' tab of the workspace to show the report
!
! /SHOW_ANIMATION=FALSE
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;







